CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:20
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Elsewhere...|D:\\CellRecovery\\220525_cell recovery_ 6 4 2 and 0 days\\220528_102915_20220528_cell recovery 6 4 2 and 0 days_cellpainting_1\\220528_102915_Plate 1\\load_data_csv
    Name of the file:load_data_with_illum.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Well,Site,Plate
    Rescale intensities?:Yes

MeasureImageQuality:[module_num:2|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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:4
    Threshold count:1
    Select the images to measure:OrigAGP, OrigDNA, OrigER, OrigMito
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Spatial scale for blur measurements:50
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
CorrectIlluminationApply:[module_num:3|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
    Select the input image:OrigDNA
    Name the output image:DNA
    Select the illumination function:IllumOrigDNA
    Select how the illumination function is applied:Divide
    Select the input image:OrigER
    Name the output image:ER
    Select the illumination function:IllumOrigER
    Select how the illumination function is applied:Divide
    Select the input image:OrigAGP
    Name the output image:AGP
    Select the illumination function:IllumOrigAGP
    Select how the illumination function is applied:Divide
    Select the input image:OrigMito
    Name the output image:Mito
    Select the illumination function:IllumOrigMito
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

RunCellpose:[module_num:4|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
    Select the input image:DNA
    Expected object diameter:60
    Detection mode:custom
    Name the output object:NucleiCP
    Use GPU:No
    Use averaging:Yes
    Supply nuclei image as well?:No
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    Save probability image?:No
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    Location of the pre-trained model file:Elsewhere...|/home/ubuntu/bucket/projects/2022_10_04_AgNPCellRecovery_fossa_Cimini/workspace/model/2022_05_28_CellPainting/
    Pre-trained model file name:CP_20221130_102925
    Flow threshold:0.7
    Cell probability threshold:1
    GPU memory share for each worker:0.1
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:200
    Use Omnipose for mask reconstruction:1.0
    Invert images:No

FlagImage:[module_num:5|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
    Hidden:1
    Hidden:1
    Name the flag's category:NucleiNumber
    Name the flag:QCFlag
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
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    Which measurement?:Count_NucleiCP
    Flag images based on low values?:Yes
    Minimum value:3
    Flag images based on high values?:No
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    Ignore flag skips on last cycle?:No

Smooth:[module_num:6|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
    Select the input image:DNA
    Name the output image:SmoothDNA
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:15
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:NucleiCP
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Watershed - Image
    Select the input image:SmoothDNA
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    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:Nuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:.6
    Lower and upper bounds on threshold:0.03,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:8|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

MeasureColocalization:[module_num:9|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
    Select images to measure:AGP, DNA, ER, Mito
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:10|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
    Select images to measure:AGP, DNA, ER, Mito
    Measure within objects?:Yes
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:3
    Range of the granular spectrum:10

MeasureObjectIntensityDistribution:[module_num:11|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
    Select images to measure:AGP, DNA, ER, Mito
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectIntensity:[module_num:12|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
    Select images to measure:AGP, DNA, ER, Mito
    Select objects to measure:Cells, Cytoplasm, Nuclei

MeasureObjectSizeShape:[module_num:13|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
    Select object sets to measure:Cells, Cytoplasm, Nuclei
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureTexture:[module_num:14|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
    Select images to measure:AGP, DNA, ER, Mito
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:3
    Measure whole images or objects?:Both
    Texture scale to measure:5
    Texture scale to measure:10
    Texture scale to measure:20

MeasureObjectNeighbors:[module_num:15|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
OverlayOutlines:[module_num:16|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
    Display outlines on a blank image?:Yes
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    Name the output image:NucleiOutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:green
    Select objects to display:Nuclei

OverlayOutlines:[module_num:17|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
    Display outlines on a blank image?:Yes
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    Name the output image:CellOutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:Nuclei
    Select outline color:Yellow
    Select objects to display:Cells

SaveImages:[module_num:18|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
    Select the type of image to save:Image
    Select the image to save:NucleiOutlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<Well>_s\g<Site>_nuclei_outlines
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<Plate>_Nuclei_Outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:19|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
    Select the type of image to save:Image
    Select the image to save:CellOutlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<Well>_s\g<Site>_cell_outlines
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<Plate>_Cell_Outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:20|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
