CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:31
HasImagePlaneDetails:False

LoadData:[module_num:1|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
    Input data file location:Default Input Folder|D:\\CellRecovery\\220609_cell recovery_6 4 2 and 0 days\\220609_090441_20220609_cell recovery ao_6 4 2 and 0 days_3vez_lowpainting\\220609_090651_Plate 1\\load_data_csv
    Name of the file:load_data_with_illum.csv
    Load images based on this data?:Yes
    Base image location:Default Input Folder|
    Process just a range of rows?:No
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    Group images by metadata?:Yes
    Select metadata tags for grouping:Well,Site,Plate
    Rescale intensities?:Yes

MeasureImageQuality:[module_num:2|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
    Calculate metrics for which images?:Select...
    Image count:1
    Scale count:4
    Threshold count:1
    Select the images to measure:AOGFP, AOPI
    Include the image rescaling value?:Yes
    Calculate blur metrics?:Yes
    Spatial scale for blur measurements:5
    Spatial scale for blur measurements:10
    Spatial scale for blur measurements:20
    Spatial scale for blur measurements:50
    Calculate saturation metrics?:Yes
    Calculate intensity metrics?:Yes
    Calculate thresholds?:No
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
CorrectIlluminationApply:[module_num:3|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
    Select the input image:AOGFP
    Name the output image:CorrGFP
    Select the illumination function:IllumAOGFP
    Select how the illumination function is applied:Divide
    Select the input image:AOPI
    Name the output image:CorrPI
    Select the illumination function:IllumAOPI
    Select how the illumination function is applied:Divide
    Set output image values less than 0 equal to 0?:Yes
    Set output image values greater than 1 equal to 1?:Yes

RunCellpose:[module_num:4|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
    Select the input image:CorrGFP
    Expected object diameter:60
    Detection mode:custom
    Name the output object:NucleiCP
    Use GPU:No
    Use averaging:Yes
    Supply nuclei image as well?:No
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    Save probability image?:Yes
    Name the probability image:Probabilities
    Location of the pre-trained model file:Elsewhere...|/home/ubuntu/bucket/projects/2022_10_04_AgNPCellRecovery_fossa_Cimini/workspace/model/2022_05_25_LiveCellPainting/
    Pre-trained model file name:CP_20220729_LC2nuclei
    Flow threshold:0.5
    Cell probability threshold:1
    GPU memory share for each worker:0.1
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:15
    Use Omnipose for mask reconstruction:1.0
    Invert images:No

FlagImage:[module_num:5|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
    Hidden:1
    Hidden:1
    Name the flag's category:Metadata
    Name the flag:QCFlag
    How should measurements be linked?:Flag if any fail
    Skip image set if flagged?:Yes
    Flag is based on:Whole-image measurement
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    Which measurement?:Count_NucleiCP
    Flag images based on low values?:Yes
    Minimum value:3
    Flag images based on high values?:No
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    Ignore flag skips on last cycle?:No

Smooth:[module_num:6|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
    Select the input image:CorrGFP
    Name the output image:FilteredGFP
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:12
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
IdentifySecondaryObjects:[module_num:7|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
    Select the input objects:NucleiCP
    Name the objects to be identified:Cells
    Select the method to identify the secondary objects:Propagation
    Select the input image:FilteredGFP
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:Yes
    Discard the associated primary objects?:Yes
    Name the new primary objects:Nuclei
    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:0.0
    Threshold correction factor:.9
    Lower and upper bounds on threshold:0.05,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
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
IdentifyTertiaryObjects:[module_num:8|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
    Select the larger identified objects:Cells
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:Yes

RescaleIntensity:[module_num:9|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
    Select the input image:CorrPI
    Name the output image:RescaleIntensityPI
    Rescaling method:Match the image's maximum to another image's maximum
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    Select image to match in maximum intensity:CorrGFP
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
ImageMath:[module_num:10|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
    Operation:Add
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:ImageAfterMath2
    Image or measurement?:Image
    Select the first image:RescaleIntensityPI
    Multiply the first image by:1
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    Image or measurement?:Image
    Select the second image:CorrGFP
    Multiply the second image by:1
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
EnhanceOrSuppressFeatures:[module_num:11|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notes:['Enhance the speckles to facilitate identification in the next steps.']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
    Select the input image:ImageAfterMath2
    Name the output image:EnhanceJoin
    Select the operation:Enhance
    Feature size:20
    Feature type:Speckles
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    Speed and accuracy:Slow
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
MaskImage:[module_num:12|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
    Select the input image:EnhanceJoin
    Name the output image:MaskJoin
    Use objects or an image as a mask?:Objects
    Select object for mask:Nuclei
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    Invert the mask?:No

Smooth:[module_num:13|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
    Select the input image:MaskJoin
    Name the output image:FilteredImageJoin
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:4
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
IdentifyPrimaryObjects:[module_num:14|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
    Select the input image:FilteredImageJoin
    Name the primary objects to be identified:Nucleoli
    Typical diameter of objects, in pixel units (Min,Max):5,25
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
    Size of smoothing filter:0
    Suppress local maxima that are closer than this minimum allowed distance:3
    Speed up by using lower-resolution image to find local maxima?:No
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:No
    Automatically calculate minimum allowed distance between local maxima?:No
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:3.4
    Lower and upper bounds on threshold:0.01,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:Yes
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:300
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    Thresholding method:Otsu

EnhanceOrSuppressFeatures:[module_num:15|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notes:['Enhance the speckles to facilitate identification in the next steps.']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
    Select the input image:CorrPI
    Name the output image:EnhancePI
    Select the operation:Enhance
    Feature size:15
    Feature type:Speckles
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    Speed and accuracy:Slow
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
MaskImage:[module_num:16|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notes:['Mask image with the cytoplasm objects, then the resulted image will contain only speckles inside the cell.']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
    Select the input image:EnhancePI
    Name the output image:MaskPI
    Use objects or an image as a mask?:Objects
    Select object for mask:Cytoplasm
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    Invert the mask?:No

IdentifyPrimaryObjects:[module_num:17|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notes:['Identify the vesicles.']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
    Select the input image:MaskPI
    Name the primary objects to be identified:Vesicles
    Typical diameter of objects, in pixel units (Min,Max):1,15
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:No
    Method to distinguish clumped objects:Intensity
    Method to draw dividing lines between clumped objects:Intensity
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Adaptive
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    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.05,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Foreground
    Size of adaptive window:300
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    Thresholding method:Otsu

MeasureColocalization:[module_num:18|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
    Select images to measure:CorrGFP, CorrPI
    Set threshold as percentage of maximum intensity for the images:15.0
    Select where to measure correlation:Within objects
    Select objects to measure:Nuclei
    Run all metrics?:Yes
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    Method for Costes thresholding:Faster

MeasureGranularity:[module_num:19|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
    Select images to measure:CorrGFP, CorrPI
    Measure within objects?:Yes
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Subsampling factor for granularity measurements:0.25
    Subsampling factor for background reduction:0.25
    Radius of structuring element:3
    Range of the granular spectrum:10

MeasureObjectIntensityDistribution:[module_num:20|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
    Select images to measure:CorrGFP, CorrPI
    Hidden:1
    Hidden:1
    Hidden:0
    Calculate intensity Zernikes?:None
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    Select objects to measure:Cells
    Object to use as center?:These objects
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    Scale the bins?:Yes
    Number of bins:4
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
MeasureObjectIntensity:[module_num:21|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
    Select images to measure:CorrGFP, CorrPI
    Select objects to measure:Cells, Cytoplasm, Nuclei, Nucleoli, Vesicles

MeasureObjectSizeShape:[module_num:22|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
    Select object sets to measure:Cells, Cytoplasm, Nuclei, Nucleoli, Vesicles
    Calculate the Zernike features?:Yes
    Calculate the advanced features?:Yes

MeasureTexture:[module_num:23|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
    Select images to measure:CorrGFP, CorrPI
    Select objects to measure:Cells, Cytoplasm, Nuclei
    Enter how many gray levels to measure the texture at:256
    Hidden:3
    Measure whole images or objects?:Both
    Texture scale to measure:5
    Texture scale to measure:10
    Texture scale to measure:20

MeasureObjectNeighbors:[module_num:24|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
    Select objects to measure:Cells
    Select neighboring objects to measure:Cells
    Method to determine neighbors:Expand until adjacent
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    Consider objects discarded for touching image border?:Yes
    Retain the image of objects colored by numbers of neighbors?:No
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    Retain the image of objects colored by percent of touching pixels?:No
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
RelateObjects:[module_num:25|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
    Parent objects:Cells
    Child objects:Vesicles
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
RelateObjects:[module_num:26|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
    Parent objects:Nuclei
    Child objects:Nucleoli
    Calculate child-parent distances?:Both
    Calculate per-parent means for all child measurements?:Yes
    Calculate distances to other parents?:No
    Do you want to save the children with parents as a new object set?:No
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
OverlayOutlines:[module_num:27|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
    Display outlines on a blank image?:Yes
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    Name the output image:NucleiOutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:green
    Select objects to display:Nuclei

OverlayOutlines:[module_num:28|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
    Display outlines on a blank image?:Yes
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    Name the output image:CellOutlines
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:cyan
    Select objects to display:Nuclei
    Select outline color:Yellow
    Select objects to display:Cells

SaveImages:[module_num:29|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
    Select the type of image to save:Image
    Select the image to save:NucleiOutlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<Well>_s\g<Site>_nuclei_outlines
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<Plate>_Nuclei_Outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

SaveImages:[module_num:30|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
    Select the type of image to save:Image
    Select the image to save:CellOutlines
    Select method for constructing file names:Single name
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    Enter single file name:\g<Well>_s\g<Site>_cell_outlines
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    Saved file format:tiff
    Output file location:Default Output Folder sub-folder|\g<Plate>_Cell_Outlines
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:Yes
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:31|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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:No
    Add image file and folder names to your object data file?:No
    Select the measurements to export:No
    Calculate the per-image mean values for object measurements?:No
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:No
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    Representation of Nan/Inf:NaN
    Add a prefix to file names?:No
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    Overwrite existing files without warning?:No
    Data to export:Image
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Experiment
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Object relationships
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cells
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nuclei
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Cytoplasm
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Vesicles
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
    Data to export:Nucleoli
    Combine these object measurements with those of the previous object?:No
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    Use the object name for the file name?:Yes
