CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:424
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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
    Filter images?:Images only
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
Metadata:[module_num:2|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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<Well>.*)_.*_.*_(?P<Site>.*)_(?P<Channel>.*)_001.tif
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:1
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:and (file does contain "CY5")
    Name to assign these images:LT
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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
    Do you want to group your images?:No
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
Smooth:[module_num:5|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notes:['Smooth the image for your secondary object']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
    Select the input image:LT
    Name the output image:FilteredImage
    Select smoothing method:Gaussian Filter
    Calculate artifact diameter automatically?:No
    Typical artifact diameter:20
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
Threshold:[module_num:6|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notes:['Find the secondary object']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enabled:False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
    Select the input image:FilteredImage
    Name the output image:Cells
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:0.0
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,0.05
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    Log transform before thresholding?:No
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
RunCellpose:[module_num:7|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notes:['Find the secondary object']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
    Select the input image:LT
    Expected object diameter:148
    Detection mode:custom
    Name the output object:Cells
    Use GPU:No
    Use averaging:Yes
    Supply nuclei image as well?:No
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    Save probability image?:Yes
    Name the probability image:Probabilities
    Location of the pre-trained model file:Elsewhere...|D:\\2022_09_09_LiveCellPainting_fossa_Cimini\\workspace\\model\\2022_03_24_Acidification_LT
    Pre-trained model file name:CP_20230327_164451
    Flow threshold:0.7
    Cell probability threshold:-4
    GPU memory share for each worker:0.1
    Stitch Threshold:0.0
    Use 3D:No
    Minimum size:30
    Use Omnipose for mask reconstruction:No
    Invert images:No
    Remove objects that are touching the edge?:Yes

ConvertObjectsToImage:[module_num:8|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notes:['Transform the secondary objects to binary']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
    Select the input objects:Cells
    Name the output image:CellThreshold
    Select the color format:Binary (black & white)
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
ImageMath:[module_num:9|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
    Operation:None
    Raise the power of the result by:0.25
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:LT_enhance
    Image or measurement?:Image
    Select the first image:LT
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:10|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
    Operation:Invert
    Raise the power of the result by:1
    Multiply the result by:1
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:LT_invert
    Image or measurement?:Image
    Select the first image:LT_enhance
    Multiply the first image by:1.0
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    Image or measurement?:Image
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
ImageMath:[module_num:11|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
    Operation:Multiply
    Raise the power of the result by:1.0
    Multiply the result by:1.0
    Add to result:0.0
    Set values less than 0 equal to 0?:Yes
    Set values greater than 1 equal to 1?:Yes
    Replace invalid values with 0?:Yes
    Ignore the image masks?:No
    Name the output image:Multiplied
    Image or measurement?:Image
    Select the first image:LT_invert
    Multiply the first image by:1.0
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    Image or measurement?:Image
    Select the second image:CellThreshold
    Multiply the second image by:1.0
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
IdentifyPrimaryObjects:[module_num:12|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
    Select the input image:Multiplied
    Name the primary objects to be identified:IdentifyPrimaryObjects
    Typical diameter of objects, in pixel units (Min,Max):30,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Otsu
    Threshold smoothing scale:1.3488
    Threshold correction factor:1.0
    Lower and upper bounds on threshold:0.0,1.0
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    Two-class or three-class thresholding?:Three classes
    Log transform before thresholding?:No
    Assign pixels in the middle intensity class to the foreground or the background?:Background
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